PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = goNogoTest2
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Routines
  Routine trial
    PolygonComponent trialBlue
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent trialOrange
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine instructions
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 'Space' for blue, nothing for orange. 'S' to start.
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    KeyboardComponent instr1Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions2
    TextComponent instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Again, 'space' for blue, nothing for orange. 'S' to start.
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    KeyboardComponent instr2Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = goNogoCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)])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
    Routine trial
  LoopTerminator trials1
  Routine instructions2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = goNogoCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)])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
    Routine trial
  LoopTerminator trials2
  Routine instructions2
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = goNogoCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)])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
    Routine trial
  LoopTerminator trials3
  Routine end
